CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_C0")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C1")
    Name to assign these images:Translation
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):75,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:350
    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:2.75

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:FilteredNuclei
    Name the objects to be identified:CellBody
    Select the method to identify the secondary objects:Propagation
    Select the input image:Translation
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei2
    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:9|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
    Select the input objects:CellBody
    Name the new objects:RelabeledCellBody
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:FilteredNuclei2
    Output object type:Convex hull

MeasureObjectIntensity:[module_num:10|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
    Hidden:2
    Select an image to measure:DNA
    Select an image to measure:Translation
    Select objects to measure:FilteredNuclei2
    Select objects to measure:RelabeledCellBody

MeasureGranularity:[module_num:11|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
    Image count:1
    Object count:2
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:FilteredNuclei2
    Select objects to measure:RelabeledCellBody

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:FilteredNuclei2
    Select objects to measure:RelabeledCellBody
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:13|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
    Hidden:2
    Hidden:2
    Hidden:1
    Select an image to measure:DNA
    Select an image to measure:Translation
    Select objects to measure:FilteredNuclei2
    Select objects to measure:RelabeledCellBody
    Texture scale to measure:3
    Measure images or objects?:Objects

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:FilteredNuclei2
    Select neighboring objects to measure:FilteredNuclei2
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureColocalization:[module_num:15|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
    Hidden:2
    Hidden:2
    Select an image to measure:DNA
    Select an image to measure:Translation
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:FilteredNuclei2
    Select an object to measure:RelabeledCellBody
    Run all metrics?:Yes
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|F:\\PAEC decon\\Analysis\\Translation\\PPHN\\IGF1\\t1440\\reanalysis2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:RelabeledCellBody|Granularity_11_DNA,RelabeledCellBody|Granularity_10_DNA,RelabeledCellBody|Granularity_13_DNA,RelabeledCellBody|Granularity_12_DNA,RelabeledCellBody|Granularity_15_DNA,RelabeledCellBody|Granularity_14_DNA,RelabeledCellBody|Granularity_16_DNA,RelabeledCellBody|Granularity_1_DNA,RelabeledCellBody|Granularity_3_DNA,RelabeledCellBody|Granularity_2_DNA,RelabeledCellBody|Granularity_5_DNA,RelabeledCellBody|Granularity_4_DNA,RelabeledCellBody|Granularity_7_DNA,RelabeledCellBody|Granularity_6_DNA,RelabeledCellBody|Granularity_9_DNA,RelabeledCellBody|Granularity_8_DNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CP_redo_
    Overwrite existing files without warning?:Yes
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